WorkflowBuilder(Version=2.6.2)
Bonsai.Vision.FileCapture(FileName="C:\Users\Andre Maia Chagas\Desktop\M-Movie0005.avi", PlaybackRate=2000, StartPosition=0, PositionUnits=Frames, Loop=false, Playing=true) => #0
-> Bonsai.Vision.Crop(RegionOfInterest(X=28, Y=0, Width=142, Height=127)) => #1
-> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=0, Val2=39, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=10, MaxArea=nil)
-> Bonsai.Vision.BinaryRegionAnalysis => #4
#1, #4 -> GroupWorkflow top-left => #5
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0)) => #2
    #2, #0 -> GroupWorkflow TL-index1 => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=121, Y=82, Width=10, Height=32)) => #4
        -> MemberSelector(Selector=RegionOfInterest) => #5
        -> MemberSelector(Selector=Width) => #6
        #5 -> MemberSelector(Selector=Height) => #7
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #9
        #6, #7, #9 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1)) => #4
    #4, #0 -> GroupWorkflow TL-index2 => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=67, Y=82, Width=13, Height=36)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2)) => #6
    #6, #0 -> GroupWorkflow TL-index3 => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=18, Y=79, Width=13, Height=31)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3)) => #8
    #8, #0 -> GroupWorkflow TL-index4 => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=119, Y=6, Width=11, Height=30)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4)) => #10
    #10, #0 -> GroupWorkflow TL-index5 => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=72, Y=6, Width=12, Height=30)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5)) => #12
    #12, #0 -> GroupWorkflow TL-index6 => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=19, Y=6, Width=13, Height=32)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #3, #5, #7, #9, #11, #13 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=217, Y=7, Width=142, Height=127)) => #6
-> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=0, Val2=39, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=95, MaxArea=300)
-> Bonsai.Vision.BinaryRegionAnalysis => #9
#6, #9 -> GroupWorkflow top-right => #10
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0)) => #2
    #2, #0 -> GroupWorkflow TR-index1 => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=115, Y=83, Width=13, Height=30)) => #4
        -> MemberSelector(Selector=RegionOfInterest) => #5
        -> MemberSelector(Selector=Width) => #6
        #5 -> MemberSelector(Selector=Height) => #7
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #9
        #6, #7, #9 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1)) => #4
    #4, #0 -> GroupWorkflow TR-index2 => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=19, Y=81, Width=11, Height=30)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2)) => #6
    #6, #0 -> GroupWorkflow TR-index3 => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=69, Y=77, Width=12, Height=38)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3)) => #8
    #8, #0 -> GroupWorkflow TR-index4 => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=121, Y=15, Width=12, Height=32)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4)) => #10
    #10, #0 -> GroupWorkflow TR-index5 => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=16, Y=13, Width=14, Height=34)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5)) => #12
    #12, #0 -> GroupWorkflow TR-index6 => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=66, Y=11, Width=16, Height=38)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #3, #5, #7, #9, #11, #13 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=30, Y=172, Width=142, Height=127)) => #11
-> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=0, Val2=39, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=95, MaxArea=300)
-> Bonsai.Vision.BinaryRegionAnalysis => #14
#11, #14 -> GroupWorkflow bottom-left => #15
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0)) => #2
    #2, #0 -> GroupWorkflow BL-index1 => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=14, Y=90, Width=11, Height=32)) => #4
        -> MemberSelector(Selector=RegionOfInterest) => #5
        -> MemberSelector(Selector=Width) => #6
        #5 -> MemberSelector(Selector=Height) => #7
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #9
        #6, #7, #9 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1)) => #4
    #4, #0 -> GroupWorkflow BL-index2 => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=110, Y=86, Width=22, Height=24)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2)) => #6
    #6, #0 -> GroupWorkflow BL-index3 => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=61, Y=86, Width=11, Height=30)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3)) => #8
    #8, #0 -> GroupWorkflow BL-index4 => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=14, Y=16, Width=12, Height=30)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4)) => #10
    #10, #0 -> GroupWorkflow BL-index5 => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=109, Y=14, Width=11, Height=32)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5)) => #12
    #12, #0 -> GroupWorkflow BL-index6 => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=63, Y=14, Width=12, Height=33)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #3, #5, #7, #9, #11, #13 -> Zip
    -> WorkflowOutput
#0 -> Bonsai.Vision.Crop(RegionOfInterest(X=216, Y=172, Width=142, Height=127)) => #16
-> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=0, Val2=39, Val3=0), Upper(Val0=179, Val1=255, Val2=255, Val3=255))
-> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=95, MaxArea=300)
-> Bonsai.Vision.BinaryRegionAnalysis => #19
#16, #19 -> GroupWorkflow bottom-right => #20
    WorkflowInput Source1 => #0
    WorkflowInput Source2 => #1
    -> Index(Operand=IntProperty(Value=0)) => #2
    #2, #0 -> GroupWorkflow BR-index1 => #3
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=114, Y=92, Width=12, Height=32)) => #4
        -> MemberSelector(Selector=RegionOfInterest) => #5
        -> MemberSelector(Selector=Width) => #6
        #5 -> MemberSelector(Selector=Height) => #7
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #9
        #6, #7, #9 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=1)) => #4
    #4, #0 -> GroupWorkflow BR-index2 => #5
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=61, Y=88, Width=29, Height=28)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=2)) => #6
    #6, #0 -> GroupWorkflow BR-index3 => #7
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=13, Y=86, Width=13, Height=32)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=3)) => #8
    #8, #0 -> GroupWorkflow BR-index4 => #9
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=118, Y=18, Width=11, Height=32)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=4)) => #10
    #10, #0 -> GroupWorkflow BR-index5 => #11
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=63, Y=18, Width=12, Height=30)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #1 -> Index(Operand=IntProperty(Value=5)) => #12
    #12, #0 -> GroupWorkflow BR-index6 => #13
        WorkflowInput Source1
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #2
        WorkflowInput Source2 => #3
        #2, #3 -> Bonsai.Vision.Crop(RegionOfInterest(X=14, Y=14, Width=11, Height=30)) => #4
        -> MemberSelector(Selector=Width) => #5
        #4 -> MemberSelector(Selector=Height) => #6
        #4 -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val2) => #8
        #5, #6, #8 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright
            )
        -> WorkflowOutput
    #3, #5, #7, #9, #11, #13 -> Zip
    -> WorkflowOutput
#5, #10, #15, #20 -> Zip
-> Bonsai.Scripting.ExpressionTransform
  Expression:
    new(
    Item1 as topLeft,
    Item2 as topRight,
    Item3 as bottomLeft,
    Item4 as bottomRight
    )
-> Bonsai.IO.CsvWriter
  FileName="C:\Users\Andre Maia Chagas\Documents\GitHub\sussex\embryo-monitoring\data\output.csv"
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
